PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = Experiment_FoodPics1
  Units = use prefs
  Screen = 1
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Routines
  Routine Instructions_Experiment
    TextComponent Instruction_Experiment
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Das war der Übungsdurchgang.
        Gleich startet das Experiment.

        Die Regeln bleiben wie gehabt:
        Neu = K
        Alt = D

        Reagiere so schnell wie möglich! Wenn du dennoch mal zu langsam bist oder einen Fehler machst, ist das ganz normal und nicht schlimm!

        Hinweis: Manche Bilder werden wiederholt, andere nicht. Es gibt kurze, mittlere und lange Abstände zwischen einem Bild und seiner Wiederholung.

        Lege nun bitte deine Zeigefinger auf die Tasten und drücke die Leertaste, um mit dem Experiment zu beginnen.
    KeyboardComponent key_resp_Instruction_Experiment
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1.0
      store = nothing
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  Routine Instructions_Uebung
    TextComponent Instruction_Uebung
      pos = (0.0, 0.0)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Du siehst gleich verschiedene Bilder. Du wirst jedes Bild nur sehr kurz sehen. Wenn du ein Bild siehst, ist es deine Aufgabe, anzugeben, ob du genau dieses Bild schon einmal gesehen hast, oder ob es neu ist.

        Wenn ein Bild neu ist, drücke K.
        Wenn ein Bild alt ist, drücke D.

        Reagiere so schnell wie möglich! Wenn du dennoch mal zu langsam bist oder einen Fehler machst, ist das ganz normal und nicht schlimm!

        Um dich an die Aufgabe zu gewöhnen, starten wir mit einem Übungsdurchgang.
        Dir wird jeweils angezeigt, ob du richtig, falsch, oder zu langsam reagiert hast.

        Lege nun deine Zeigefinger auf die Tasten D und K und drücke die Leertaste, um mit dem Übungsdurchgang zu beginnen.
    KeyboardComponent key_resp_Instruction_Uebung
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1.0
      store = nothing
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  Routine Feedback_Experiment
    CodeComponent code
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if not key_resp_Bilder.keys:
            msg='Zu langsam!'
        else:
            msg='  '
    TextComponent FB_Experiment
      color = $[1.000,-1.000,-1.000]
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.1
      letterHeight = 0.15
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  Routine Hungerrating1
    TextComponent Hungerrating1_Frage
      pos = (0,0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Physiologische Zustände wie Hunger können die Gedächtnisleistung beeinflussen. Gib auf der folgenden Skala bitte an, wie hungrig du gerade bist. Klicke dazu einen Punkt auf der Skala zwischen 0 und 1 an, der dir passend erscheint.

        0 = gar nicht hungrig
        1 = extrem hungrig
    RatingScaleComponent Hungerrating1_Antwort
      pos = 0, -0.3
      startVal [time (s)] = 0.0
      disappear = True
      size = 1.5
      storeRatingTime = False
      forceEndRoutine = True
      visualAnalogScale = True
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  Routine Instructions_Liking
    TextComponent Instruktion_Liking
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Im Folgenden wirst du einige Bilder aus dem Experiment noch einmal sehen. Diesmal ist es deine Aufgabe, zu jedem Bild anzugeben, wie sehr du dieses Lebensmittel generell magst.

        Drücke bitte die Leertaste, um fortzufahren.
    KeyboardComponent key_resp_Instruktion_Liking
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Experiment
    ImageComponent Bilder
      stopVal [duration (s)] = 0.3
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $filename
      size = (600, 450)
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    KeyboardComponent key_resp_Bilder
      correctAns = $ans_corr
      storeCorrect = True
      stopVal [duration (s)] = 0.9
      forceEndRoutine = True
      allowedKeys = 'd','k'
      startVal [time (s)] = 0.5
      store = first key
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    TextComponent Alt_Experiment
      text = Alt
      stopVal [duration (s)] = 0.9
      pos = (-0.75, 0.75)
      startVal [time (s)] = 0.5
      letterHeight = 0.15
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    TextComponent Neu_Experiment
      text = Neu
      stopVal [duration (s)] = 0.9
      pos = (0.75, 0.75)
      startVal [time (s)] = 0.5
      letterHeight = 0.15
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  Routine Instructions_Wanting
    TextComponent Instruktion_Wanting
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Im Folgenden wirst du einige Bilder aus dem Experiment noch einmal sehen. Diesmal ist es deine Aufgabe, zu jedem Bild anzugeben, wie sehr du dieses Lebensmittel in diesem Moment haben möchtest.

        Drücke bitte die Leertaste, um fortzufahren.
    KeyboardComponent key_resp_Instruktion_Wanting
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Hungerrating2
    TextComponent Hungerrating2_Frage
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Dieser Teil des Experiments ist geschafft.

        Gib bitte nun auf der Skala an, wie hungrig du momentan bist. Klicke dazu einen Punkt auf der Skala zwischen 0 und 1 an, der dir passend erscheint.

        0 = gar nicht hungrig
        1 = extrem hungrig

        0 = gar nicht hungrig
        1 = extrem hungrig
    RatingScaleComponent Hungerrating2_Antwort
      pos = 0, -0.3
      startVal [time (s)] = 0.0
      disappear = True
      size = 1.5
      storeRatingTime = False
      forceEndRoutine = True
      visualAnalogScale = True
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  Routine Uebung
    ImageComponent Uebungsbild
      stopVal [duration (s)] = 0.3
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $Bild_No
      size = (600, 450)
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    KeyboardComponent key_resp_Uebungsbild
      correctAns = $Ans_corr
      storeCorrect = True
      stopVal [duration (s)] = 0.9
      forceEndRoutine = True
      allowedKeys = 'd','k'
      startVal [time (s)] = 0.5
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    TextComponent Alt_Uebung
      text = Alt
      stopVal [duration (s)] = 0.9
      pos = [-.75, 0.75]
      startVal [time (s)] = 0.5
      letterHeight = 0.15
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    TextComponent Neu_Uebung
      text = Neu
      stopVal [duration (s)] = 0.9
      pos = [.75, 0.75]
      startVal [time (s)] = 0.5
      letterHeight = 0.15
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  Routine Feedback_Uebung
    CodeComponent code_FB_Uebung
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if not key_resp_Uebungsbild.keys:
            msg='Zu langsam!'
        elif key_resp_Uebungsbild.corr:
            msg='Richtig!'
        else:
            msg='Falsch!'
    TextComponent FB_Uebung
      color [set every repeat] = $[1.000,1.000,1.000]
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 0.1
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.15
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  Routine Wanting
    ImageComponent Bilder_Wanting
      pos = (0, 200)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $filename
      size = (400, 250)
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    TextComponent Frage_Wanting
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      letterHeight = 0.09
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      text:
        Wie sehr möchtest du dieses Lebensmittel momentan haben? Klicke einen Punkt auf der Skala zwischen 0 und 1 an, der dir passend erscheint.

                                0 = gar nicht
                                1 = extrem
    RatingScaleComponent Rating_Wanting
      pos = 0, -0.65
      startVal [time (s)] = 0.5
      size = 1.0
      showAccept = False
      storeRatingTime = False
      forceEndRoutine = True
      visualAnalogScale = True
      singleClick = True
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  Routine Ende
    TextComponent Aufgabe_geschafft
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Den Großteil des Experiments hast du nun geschafft.

        Melde dich bitte bei der Versuchsleiterin, um fortzufahren.
  Routine Liking
    ImageComponent Bilder_Liking
      pos = (0,200)
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $filename
      size = (400,250)
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    TextComponent Frage_Liking
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      letterHeight = 0.09
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      text:
        Wie sehr magst du dieses Lebensmittel? Klicke einen Punkt auf der Skala zwischen 0 und 1 an, der dir passend erscheint.

                            0 = gar nicht
                            1 = extrem
    RatingScaleComponent Rating_Liking
      pos = 0, -0.65
      startVal [time (s)] = 0.5
      size = 1.0
      showAccept = False
      storeRatingTime = False
      forceEndRoutine = True
      visualAnalogScale = True
      singleClick = True
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  Routine Instructions
    TextComponent Begruessung
      color = $[1.000,1.000,1.000]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Herzlich Willkommen zur Studie „Erinnerung im Alltag“.

        Da ausreichendes Sehvermögen wichtig für das Experiment ist,
        möchte ich dich bitten, deine Sehhilfe zu benutzen, falls du eine
        benötigst.

        Drücke bitte die Leertaste, um mit der Studie zu beginnen!
    KeyboardComponent key_resp_Begruessung
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  Routine Hungerrating1
  Routine Instructions_Uebung
  LoopInitiator trials_Uebung loopType="TrialHandler"
    conditionsFile = Uebung_gerade.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'Bild_No': u'Uebungsdurchgang\\0216.jpg', u'Ans_corr': u'k'},
      {u'Bild_No': u'Uebungsdurchgang\\0231.jpg', u'Ans_corr': u'k'},
      {u'Bild_No': u'Uebungsdurchgang\\0216 - Kopie.jpg', u'Ans_corr': u'd'},
      {u'Bild_No': u'Uebungsdurchgang\\0245.jpg', u'Ans_corr': u'k'},
      {u'Bild_No': u'Uebungsdurchgang\\0276.jpg', u'Ans_corr': u'k'},
      {u'Bild_No': u'Uebungsdurchgang\\0379.jpg', u'Ans_corr': u'k'},
      {u'Bild_No': u'Uebungsdurchgang\\0231 - Kopie.jpg', u'Ans_corr': u'd'},
      {u'Bild_No': u'Uebungsdurchgang\\0464.jpg', u'Ans_corr': u'k'},
      {u'Bild_No': u'Uebungsdurchgang\\0245 - Kopie.jpg', u'Ans_corr': u'd'},
      {u'Bild_No': u'Uebungsdurchgang\\0397.jpg', u'Ans_corr': u'k'}]
    Routine Uebung
    Routine Feedback_Uebung
  LoopTerminator trials_Uebung
  Routine Instructions_Experiment
  LoopInitiator trials_Experiment loopType="TrialHandler"
    conditionsFile = Trials_Random.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'Ans_corr': u'd', u'Bild_No': u'Bilder\\0052.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Fleisch', u'Fleisch_keinFleisch': u'Fleisch', u'repeated_unique': u'r'},
      {u'Ans_corr': u'd', u'Bild_No': u'Bilder\\0288.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Gemuese', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Ans_corr': u'd', u'Bild_No': u'Bilder\\0446.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Gemuese', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Ans_corr': u'd', u'Bild_No': u'Bilder\\0015.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Ans_corr': u'd', u'Bild_No': u'Bilder\\0292.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Ans_corr': u'd', u'Bild_No': u'Bilder\\0190.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Fleisch', u'Fleisch_keinFleisch': u'Fleisch', u'repeated_unique': u'r'},
      {u'Ans_corr': u'd', u'Bild_No': u'Bilder\\0299.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Gemuese', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Ans_corr': u'd', u'Bild_No': u'Bilder\\1162.jpg', u'Food_NoFood': u'NoFood', u'Kategorie': u'NoFood', u'Fleisch_keinFleisch': u'nf', u'repeated_unique': u'r'}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
    Routine Experiment
    Routine Feedback_Experiment
  LoopTerminator trials_Experiment
  Routine Hungerrating2
  Routine Instructions_Wanting
  LoopInitiator trials_Wanting loopType="TrialHandler"
    conditionsFile = Trials_Wanting_Liking.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Bild_No': u'Bilder\\0015.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0022.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0026.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0060.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0117.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0155.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0186.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0187.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0317.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'}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
    Routine Wanting
  LoopTerminator trials_Wanting
  Routine Instructions_Liking
  LoopInitiator trials_Liking loopType="TrialHandler"
    conditionsFile = Trials_Wanting_Liking.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Bild_No': u'Bilder\\0015.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0022.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0026.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0060.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0117.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0155.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0186.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0187.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'},
      {u'Bild_No': u'Bilder\\0317.jpg', u'Food_NoFood': u'Food', u'Kategorie': u'Herzhaft', u'Fleisch_keinFleisch': u'keinFleisch', u'repeated_unique': u'r'}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
    Routine Liking
  LoopTerminator trials_Liking
  Routine Ende
